PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Age?': '', 'Gender?': '', 'Nationality?': '', 'Highest Educational Degree?': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1536, 864]
  expName = CatRev1_within_easy
  keyboardBackend = ioHub
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Routines
  Routine infCons
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    TextComponent informed_consent
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        *** INFORMED CONSENT ***

        This research investigates the psychological processes used when people learn to identify objects in the world. You are being asked to participate in this research study because you are a normal healthy adult, and we wish to better understand basic learning processes in your population. The purpose of this research is to gain more knowledge about the cognitive processes involved in simple forms of associative learning.

        If you agree to participate, we will ask you to perform in a simple computer task that will last approximately 15 minutes. In this task, you will see a series of abstract images presented individually on the screen and your task will be to learn choose one of two response options for each image.  Also, you will be asked to respond quickly and accurately on your computer keyboard when the image appears.

        • Risks/Discomforts: There are no risks for participating in this study beyond those associated with normal computer use over a 15 min period.

        • Benefits: This research is not designed to directly benefit you, but your help with this study will advance basic science on the cognitive processes involved in predictive learning in normal healthy individuals. Ultimately, this research could lead to a better understanding of some of the associative learning processes that are negatively impacted by various psychological conditions (such as aging, dementia, etc).

        • Confidentiality: This study does not collect identifying information, and all data collected will remain anonymous. We will ask about your gender, age, and nationality, and we will record your performance in the task itself. However, this information will not be linked directly to any individual participant. The data we obtain will be stored indefinitely and may be shared publicly via online repositories for findings that are ultimately published.

        Your participation in this research is completely voluntary, and you will be able to stop at any time without penalty. If you have any questions, you can contact: Andrew R. Delamater (andrewd@brooklyn.cuny.edu). If you have any questions about your rights as a research participant or if you would like to talk to someone other than the researcher, you can contact CUNY Research Compliance Administrator at 646-664-8918 or HRPP@cuny.edu.

        If you wish to participate in the study, please press the spacebar for additional instructions.
    KeyboardComponent resp_consent
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be presented with a series of abstract images that represent the molecular structure of various natural objects. Your task will be to learn from which of two regions in the world these objects come (Northern Hemisphere or Southern Hemisphere).

        More specifically, you will see 1 of 8 different abstract images at a time and be asked to indicate whether you think that image reflects an object taken from the Northern or Southern Hemisphere. Choose the Left Arrow Key for Northern or the Right Arrow Key for Southern Hemisphere. At first, you will need to guess, but you will be provided with feedback after your answer to help you learn which objects come from Northern or Southern Hemispheres.

        Your response times are also important. Please make your response choices as quickly, but also as accurately, as you can. Your feedback will display the time (in sec) that it took for you to reach your decision, and also if your choice was correct (with a high pitch sound) or not (low pitch sound).

        There will be a break halfway through.

        Press the space bar when you are ready to begin.
    KeyboardComponent resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_random
      Code Type = Both
      Before Experiment:
        #import time

        # Define your string vector
        #string_vector = ["design/CatRev1_trials_set1_easy.csv", "design/CatRev1_trials_set2_easy.csv","design/CatRev1_trials_set3_easy.csv", "design/CatRev1_trials_set4_easy.csv"]

        # Use the hash of the current time as a seed for randomness
        #seed = hash(id(string_vector) + int(time.time()))

        # Generate a pseudo-random index
        #random_index = seed % len(string_vector)

        # Retrieve the pseudo-randomly selected element
        #random_csv = string_vector[random_index]

        # Print the pseudo-randomly selected element
        #print("Randomly selected element:", random_csv)
      Before JS Experiment:
        // Define your string vector
        // var stringVector = ["design/CatRev1_trials_set1.csv", "design/CatRev1_trials_set2.csv","design/CatRev1_trials_set3.csv", "design/CatRev1_trials_set4.csv"];

        // Generate a random index
        // var randomIndex = Math.floor(Math.random() * stringVector.length);

        // Retrieve the randomly selected element
        // var random_csv = stringVector[randomIndex];

        // Print the randomly selected element
        // console.log("Randomly selected element:", random_csv);
  Routine getReady
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    TextComponent text_pre_fixation
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine fixation
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    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Routine:
        jitter = random() * (1.0)
        jitter = round(jitter, 1) + 0.5
        thisExp.addData('ITI', jitter)
    TextComponent text_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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  Routine stim
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    ImageComponent stimulus
      image [set every repeat] = $Exemplars
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    TextComponent response_northern_text
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 0.0
      text = Northern Hemisphere (Left)
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    TextComponent response_southern_text
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 0.0
      text = Southern Hemisphere (Right)
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    KeyboardComponent response
      allowedKeys [set every repeat] = 'right','left'
      correctAns = $r_correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent response_code
      Code Type = Auto->JS
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      Begin Experiment:
        corr_tone=''
        inco_tone=''
      End Routine:
        if response.corr:#stored on last run routine
          corr_tone=.7
          inco_tone=0
        else:
          corr_tone=0
          inco_tone=.7
  Routine feedback
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    CodeComponent feedback_code
      Code Type = Both
      Begin Experiment:
        msg=''
      Begin JS Experiment:
        msg = "";
      Begin JS Routine:
        if (response.rt > 3.5) {
            msg = "Too Slow, Please Respond More Quickly";
        } else {
            if (response.corr) {
                msg = "Correct! RT=" + response.rt.toFixed(3);
            } else {
                msg = "Incorrect";
            }
        }
      Begin Routine:
        if response.rt > 3.5:
           msg="Too Slow, Please Respond More Quickly"
        else:
            if response.corr:
                msg="Correct! RT=%.3f" %(response.rt)
            else:
                msg="Incorrect"
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    SoundComponent correct_tone
      sound = 440
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = corr_tone
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    SoundComponent incorrect_tone
      sound = 220
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = inco_tone
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  Routine end
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    TextComponent text_end
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation.

        Press the Space Bar to advance, but then Please wait until you see the green "Thank-You" message and click OK to exit.
    KeyboardComponent resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine nextTask
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    TextComponent next_task_ready
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with a new set of objects to learn about.

        Press the "Space Bar" when you are Ready to Begin (or Resume).
    KeyboardComponent ready_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent random_task
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $tasksRows
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Flow
  Routine infCons
  Routine instructions
  LoopInitiator task loopType="TrialHandler"
    conditionsFile = design/CatRev1_task.csv
    isTrials = False
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('tasksRows', ' 0:2')]),
      OrderedDict([('tasksRows', ' 2:4')])]
    Routine nextTask
    LoopInitiator phase loopType="TrialHandler"
      Selected rows = $tasksRows
      conditionsFile = design/CatRev1_phase_easy.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trialsRows', ' 0:8'), ('eachBlock', 6)]),
        OrderedDict([('trialsRows', ' 8:16'), ('eachBlock', 6)]),
        OrderedDict([('trialsRows', ' 16:24'), ('eachBlock', 6)]),
        OrderedDict([('trialsRows', ' 24:36'), ('eachBlock', 6)])]
      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $trialsRows
        conditionsFile = design/CatRev1_trials_set1_easy.csv
        loopType = random
        nReps = eachBlock
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        conditions:
          [OrderedDict([('task', 'total'), ('phase', 1), ('Exemplars', 'images/Ex1.jpg'), ('r_correct', 'left'), ('condition', 'training'), ('difficulty', 'easy'), ('set', 1)]),
          OrderedDict([('task', 'total'), ('phase', 1), ('Exemplars', 'images/Ex1.jpg'), ('r_correct', 'left'), ('condition', 'training'), ('difficulty', 'easy'), ('set', 1)]),
          OrderedDict([('task', 'total'), ('phase', 1), ('Exemplars', 'images/Ex2.jpg'), ('r_correct', 'left'), ('condition', 'training'), ('difficulty', 'easy'), ('set', 1)]),
          OrderedDict([('task', 'total'), ('phase', 1), ('Exemplars', 'images/Ex2.jpg'), ('r_correct', 'left'), ('condition', 'training'), ('difficulty', 'easy'), ('set', 1)]),
          OrderedDict([('task', 'total'), ('phase', 1), ('Exemplars', 'images/Ex3.jpg'), ('r_correct', 'right'), ('condition', 'training'), ('difficulty', 'easy'), ('set', 1)]),
          OrderedDict([('task', 'total'), ('phase', 1), ('Exemplars', 'images/Ex3.jpg'), ('r_correct', 'right'), ('condition', 'training'), ('difficulty', 'easy'), ('set', 1)]),
          OrderedDict([('task', 'total'), ('phase', 1), ('Exemplars', 'images/Ex4.jpg'), ('r_correct', 'right'), ('condition', 'training'), ('difficulty', 'easy'), ('set', 1)]),
          OrderedDict([('task', 'total'), ('phase', 1), ('Exemplars', 'images/Ex4.jpg'), ('r_correct', 'right'), ('condition', 'training'), ('difficulty', 'easy'), ('set', 1)]),
          OrderedDict([('task', 'total'), ('phase', 2), ('Exemplars', 'images/Ex1.jpg'), ('r_correct', 'right'), ('condition', 'reversed'), ('difficulty', 'easy'), ('set', 1)])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
        Routine fixation
        Routine stim
        Routine feedback
      LoopTerminator trials
    LoopTerminator phase
  LoopTerminator task
  Routine end
